[[model]]
name: Majumder 2016 acetylcholine sensitive potassium current
author: Charles Houston

# Initial values
membrane.V = -82.4202

[environment]
time = 0 bind time
    in [ms]

[membrane]
dot(V) = -ikach.i_KAch
    in [mV]
T = 310
    in [K]
F = 96.5
    in [C/mmol]
R = 8.314
    in [J/mol/K]
Ko = 5400
    in [uM]
Ki = 143720
    in [uM]
Nai = 14237.1
    in [uM]
Nao = 140000
    in [uM]
Ach = 10 [uM]
    in [uM]

[ikach]
g_KAch = 0.37488 [mS/uF]
    in [mS/uF]
E_K = membrane.R * membrane.T / membrane.F * log(membrane.Ko / membrane.Ki)
    in [mV]

i_KAch = (k1 / (1.0 + k2 / membrane.Ach ^ k3)) * (k4 + k5 / (1.0 + exp((membrane.V + k6) / k7))) * (membrane.V - E_K - k8)
k1 = 3.5
    in [1]
k2 = 9.13652
    in [1]
k3 = 0.477811
    in [1]
k4 = 0.04
    in [1]
k5 = 0.23
    in [1]
k6 = 102 [mV]
    in [mV]
k7 = 10 [mV]
    in [mV]
k8 = 10 [mV]
    in [mV]
